<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details>a Collaborative project with Eva Kiermaier.</Details>
        <Title>Cell_movement_grid_v24</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Size symbol="size" value="1173,2500,0"/>
            <BoundaryConditions>
                <Condition type="constant" boundary="x"/>
                <Condition type="constant" boundary="y"/>
                <Condition type="constant" boundary="-x"/>
                <Condition type="constant" boundary="-y"/>
            </BoundaryConditions>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="noflux">
                <Image path="/Users/jonas.arruda/PyCharm Projects/CellMigration/learned_summaries/Cell_migration_grid_v3_final2_invers.tiff"/>
            </Domain>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="600000"/>
        <!--    <Disabled>
        <StopTime value="5000"/>
    </Disabled>
-->
        <TimeSymbol symbol="time"/>
        <SaveInterval value="0"/>
        <RandomSeed value="0"/>
    </Time>
    <Analysis>
        <ModelGraph format="dot" reduced="false" include-tags="#untagged"/>
        <Logger time-step="30">
            <Input>
                <Symbol symbol-ref="nodeL"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <!--    <Disabled>
        <Symbol symbol-ref="puls"/>
    </Disabled>
-->
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <!--    <Disabled>
        <Gnuplotter time-step="500">
            <Plot>
                <Field symbol-ref="u1"/>
                <Cells internal:disabled="true" value="cell.id"/>
            </Plot>
            <Terminal name="png"/>
            <Plot>
                <Field symbol-ref="dummy"/>
                <Cells value="cell.id"/>
            </Plot>
            <Plot>
                <Cells value="cell.id"/>
                <Field symbol-ref="u1"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
    </Analysis>
    <CPM>
        <Interaction>
            <Contact type1="cells" type2="cells" value="40"/>
            <Contact type1="cells" type2="medium" value="20"/>
            <Contact type1="cells" type2="boundary" value="1000"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics yield="0.05" temperature="6"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>4</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <Global>
        <Constant symbol="tumble.run_duration" value="0"/>
        <Constant symbol="cell_nodes" name="CPM cell volume (μm^2 / 1.31^2)" value="cell_nodes_real / (nodeL*nodeL)"/>
        <Constant symbol="cell_nodes_real" name="CPM cell volume μm^2" value="50"/>
        <Constant symbol="x0_chemokine" name="position chemokine source in um" value="x0_sim * nodeL"/>
        <Constant symbol="y0_chemokine" name="position chemokine source in μm" value="hole.diam+hole.diam/2+270"/>
        <Field symbol="dummy" value="-1"/>
        <!--    <Disabled>
        <Constant symbol="D_sim" name="diffusion converted to simulation" value="D/(nodeL*nodeL)"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Constant symbol="D" name="Diffusion in μm^2/s" value="1.42e+2"/>
    </Disabled>
-->
        <Constant symbol="x0_sim" name="position chemokine source for simulation" value="size.x/2"/>
        <Constant symbol="y0_sim" name="position chemokine source for simulation" value="y0_chemokine/nodeL"/>
        <Constant symbol="sigma0" name="spread of inital concentration (std)" value="550"/>
        <Constant symbol="nodeL" name="factor from simulation lattice ength to μm" value="1.31"/>
        <Constant symbol="peak_concentration" name="peak concentration of the chemokine (total of 7ng mass of the chemokine)" value="7e+6"/>
        <Constant symbol="num_cells" name="number of cell in simulation" value="50"/>
        <Constant symbol="hole.diam" name="diameter of the hole in μm" value="1500"/>
        <Constant symbol="hole.diam_sim" name="diameter of the hole in simulation" value="hole.diam/nodeL"/>
        <Constant symbol="puls_period" value="30"/>
        <Variable symbol="puls" value="1.0 "/>
        <Variable symbol="time_last_puls" value="0.0"/>
        <Event trigger="when-true" name="puls-event">
            <Condition>time >= time_last_puls + puls_period</Condition>
            <!--    <Disabled>
        <Intermediate symbol="puls" value="mod(puls+1,2) "/>
    </Disabled>
-->
            <Rule symbol-ref="puls">
                <Expression>mod(puls+1,2)  </Expression>
            </Rule>
            <Rule symbol-ref="time_last_puls">
                <Expression>time</Expression>
            </Rule>
        </Event>
        <Field symbol="u1" value="puls*peak_concentration/(2*pi*(sigma0^2))*exp(-1/2*(((space.x)-(x0_sim))^2+ ((space.y)-(y0_sim))^2)/(sigma0^2)) ">
            <!--    <Disabled>
        <Diffusion rate="D_num"/>
    </Disabled>
-->
        </Field>
    </Global>
    <CellPopulations>
        <Population type="cells" size="0">
            <InitCircle name="Starting area of the cells" number-of-cells="num_cells" mode="random">
                <!--    <Disabled>
        <Dimensions radius="65 / nodeL" center="size.x/2,hole.diam_sim/2,0"/>
    </Disabled>
-->
                <Dimensions radius="65 / nodeL" center="size.x/2,size.y/3,0"/>
            </InitCircle>
        </Population>
        <BoundaryValue boundary="domain" value="boundary"/>
    </CellPopulations>
    <CellTypes>
        <CellType class="medium" name="medium">
            <Property symbol="l_U" value="0"/>
        </CellType>
        <CellType class="medium" name="boundary"/>
        <CellType class="biological" name="cells">
            <VolumeConstraint target="cell_nodes" name="target volume in μm^2 / (nodeL*nodeL)" strength="1"/>
            <Constant symbol="alpha_start" name="angle for random starting direction" value="rand_uni(0,2*pi) "/>
            <PropertyVector symbol="move.dir" name="random direction" value="cos(alpha_start), sin(alpha_start), 0 "/>
            <Constant symbol="move.duration.scale" name="Inverse mean of exponential distribution (1/seconds)" value="1 / move.duration.mean"/>
            <Constant symbol="move.duration.shape" name="shape of gamma distribution fixed to be an exponential" value="1"/>
            <Constant symbol="move.strength" name="strength of directed movement" value="10"/>
            <Constant symbol="move.duration.mean" name="Mean of exponential waiting time (seconds)" value="0.1 "/>
            <Property symbol="tumble.run_duration" name="run duration" value="0.0"/>
            <Property symbol="tumble.last" name="last tumble event" value="0"/>
            <DirectedMotion direction="move.dir" name="Persistent.Random.Walk" strength="move.strength"/>
            <Event trigger="when-true" time-step="5" name="tumble">
                <Condition>time >= tumble.last + tumble.run_duration</Condition>
                <Rule symbol-ref="tumble.last" name="last tumble event">
                    <Expression>time</Expression>
                </Rule>
                <Rule symbol-ref="tumble.run_duration" name="new update time (gamma distributed)">
                    <Expression>rand_gamma(move.duration.shape, move.duration.scale)    </Expression>
                </Rule>
                <Intermediate symbol="alpha" name="angle for random direction" value="rand_uni(0,2*pi)"/>
                <VectorRule symbol-ref="move.dir" name="random direction" notation="x,y,z">
                    <Expression>cos(alpha), sin(alpha) , 0</Expression>
                </VectorRule>
            </Event>
            <Constant symbol="gradient_strength" name="gradient of chemokine" value="1"/>
            <Chemotaxis strength="puls*gradient_strength*1000" field="u1"/>
        </CellType>
    </CellTypes>
</MorpheusModel>
